/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    // see https://dvrk.readthedocs.io
    "$id": "dvrk-system.schema.json",
    "$version": "1",
    "IOs":
    [
        {
            "name": "IO1",
            "port": "fw",
            "protocol": "srbw"
        }
    ]
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ_Classic",
            "IO": "IO1",
            "IO_file": "sawRobotIO1394-SUJ.json",
            "arm_file": "suj-ECM-1-2-3.json"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "26493",
            "IO": "IO1",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "23022",
            "IO": "IO1",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "27871",
            "IO": "IO1",
            "base_frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
    ]
}
