//* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
        , "watchdog-timeout": 0.04 // in seconds
        , "firewire-protocol": "broadcast-read-write"
    }
    ,
    "operator-present": {
        "io": "io/sawRobotIO1394-MTML-dv-head-sensor.xml"
    }
    ,
    "endoscope-focus": {
        "io": "io/sawRobotIO1394-MTML-dv-endoscope-focus.xml"
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ_Classic",
            //"simulation": "KINEMATIC",
            "io": "sawRobotIO1394-SUJ.xml",
            "kinematic": "suj-ECM-1-2-3.json"
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "26493",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "23022",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }

        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "27871",
            "base-frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "72335", 
            "base-frame": {
                "reference-frame": "HRSV",
                // "transform": [[ 1.0,  0.0,          0.0,          0.180],
                //               [  0.0,  1.0,         0.0,          0.400],
                //               [  0.0,  0.0,         1.0,          0.475],
                //               [  0.0,  0.0,          0.0,          1.0]]

                // "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                //              [  0.0,  0.5,  0.866025404,          0.400],
                //              [  0.0,  0.866025404,         -0.5,  0.475],
                //              [  0.0,  0.0,          0.0,          1.0]]
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]                
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "81985",
            "base-frame": {
                "reference-frame": "HRSV",
                // "transform": [[  1.0,  0.0,          0.0,          -0.180],
                //               [  0.0,  1.0,          0.0,           0.400],
                //               [  0.0,  0.0,          1.0,           0.475],
                //               [  0.0,  0.0,          0.0,          1.0]]

                // "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                //               [  0.0,  0.5,  0.866025404,          0.400],
                //               [  0.0,  0.866025404,         -0.5,  0.475],
                //               [  0.0,  0.0,          0.0,          1.0]]

                // "transform": [[ 1.0,  0.0,          0.0,          0.180],
                //                 [  0.0,  0.866025404,  0.5,          0.400],
                //                 [  0.0,  0.5,         -0.866025404,  0.475],
                //                 [  0.0,  0.0,          0.0,          1.0]]

                // "transform": [[  1.0,  0.0,          0.0,          0.180], 
                //             [  0.0, -0.866025404, -0.5,          0.400], 
                //             [  0.0, -0.5,          0.866025404,  0.475],
                //             [  0.0,  0.0,          0.0,          1.0]]

                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                                    [  0.0,  0.5,  -0.866025404,          0.400],
                                    [  0.0,  -0.866025404,         -0.5,  0.475],
                                    [  0.0,  0.0,          0.0,          1.0]]



            }
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1",
            "psm-base-frame": {
                "component": "ECM",
                "interface": "Arm"
            }
        }
        ,
	{
            "mtm": "MTML",
            "psm": "PSM2",
            "psm-base-frame": {
            "component": "ECM",
            "interface": "Arm"
        }
    }
    ]
    ,
    "ecm-teleop":
    {
        "mtm-left": "MTML",
        "mtm-right": "MTMR",
        "ecm": "ECM"
    }
}
